# Generated by Configurator on Thu Mar 06 11:47:52 PST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,ttyACM0,SerialManager,/dev/ttyACM0
Device,Blackfly S BFS-U3-51S5M,SpinnakerCamera,Blackfly S BFS-U3-51S5M
Device,TriggerScopeMM-Hub,TriggerScopeMM,TriggerScopeMM-Hub
Device,TS_TTL1-8,TriggerScopeMM,TS_TTL1-8
Device,TS_DAC01,TriggerScopeMM,TS_DAC01
Device,TS_DAC02,TriggerScopeMM,TS_DAC02
Device,TS_DAC03,TriggerScopeMM,TS_DAC03
Device,TL Shutter,Utilities,State Device Shutter
Device,DHub,DemoCamera,DHub
Device,DA Z Stage,Utilities,DA Z Stage

# Pre-init settings for devices
Property,Blackfly S BFS-U3-51S5M,Serial Number,21278186
Property,TriggerScopeMM-Hub,Port,ttyACM0
Property,TS_DAC01,Voltage Range,0 - 5V
Property,TS_DAC02,Voltage Range,0 - 5V
Property,TS_DAC03,Voltage Range,0 - 10V
Property,DA Z Stage,Stage High Position(um),30.0000
Property,DA Z Stage,Stage High Voltage,10.0000
Property,DA Z Stage,Stage Low Position(um),0.0000
Property,DA Z Stage,Stage Low Voltage,0.0000

# Pre-init settings for COM ports
Property,ttyACM0,AnswerTimeout,500.0000
Property,ttyACM0,BaudRate,115200
# The following line raised an error in linux, and so is commented out
# Property,ttyACM0,DTR,Disable
Property,ttyACM0,DataBits,8
Property,ttyACM0,DelayBetweenCharsMs,0.0000
# The following line raised an error in linux, and so is commented out
#Property,ttyACM0,Fast USB to Serial,Disable
Property,ttyACM0,Handshaking,Off
Property,ttyACM0,Parity,None
Property,ttyACM0,StopBits,1
Property,ttyACM0,Verbose,0

# Hub (parent) references
Parent,TS_TTL1-8,TriggerScopeMM-Hub
Parent,TS_DAC01,TriggerScopeMM-Hub
Parent,TS_DAC02,TriggerScopeMM-Hub
Parent,TS_DAC03,TriggerScopeMM-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,DA Z Stage,0

# Roles
Property,Core,Camera,Blackfly S BFS-U3-51S5M
Property,Core,Shutter,TL Shutter
Property,Core,Focus,DA Z Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: DAC01-Volts
# Preset: NewPreset
ConfigGroup,DAC01-Volts,NewPreset,TS_DAC01,Volts,0.0000


# Group: Camera - Framerate Enabled
# Preset: 1
ConfigGroup,Camera - Framerate Enabled,1,Blackfly S BFS-U3-51S5M,Frame Rate Control Enabled,1

# Preset: 0
ConfigGroup,Camera - Framerate Enabled,0,Blackfly S BFS-U3-51S5M,Frame Rate Control Enabled,0


# Group: DAC02-Volts
# Preset: NewPreset
ConfigGroup,DAC02-Volts,NewPreset,TS_DAC02,Volts,0.0000


# Group: Channel

# Group: Camera - Framerate
# Preset: NewPreset
ConfigGroup,Camera - Framerate,NewPreset,Blackfly S BFS-U3-51S5M,Frame Rate,26.5716


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Blackfly S BFS-U3-51S5M,Exposure Auto,Off
ConfigGroup,System,Startup,Blackfly S BFS-U3-51S5M,Gain Auto,Off
ConfigGroup,System,Startup,Blackfly S BFS-U3-51S5M,ADC Bit Depth,Bit12
ConfigGroup,System,Startup,Blackfly S BFS-U3-51S5M,Pixel Format,Mono12p
ConfigGroup,System,Startup,Blackfly S BFS-U3-51S5M,Gamma Enabled,0
ConfigGroup,System,Startup,Blackfly S BFS-U3-51S5M,Black Level,1
ConfigGroup,System,Startup,TriggerScopeMM-Hub,UseActionLEDs,Off
ConfigGroup,System,Startup,TS_TTL1-8,State,1
ConfigGroup,System,Startup,TS_DAC01,Sequence,On
ConfigGroup,System,Startup,TS_DAC01,Sequence Trigger Edge,Falling
ConfigGroup,System,Startup,TS_DAC02,Sequence,On
ConfigGroup,System,Startup,TS_DAC02,Sequence Trigger Edge,Falling
ConfigGroup,System,Startup,TL Shutter,State Device,TS_TTL1-8
ConfigGroup,System,Startup,DA Z Stage,DA Device,TS_DAC03


# Group: LF Channel
# Preset: State2
ConfigGroup,LF Channel,State2,TS_DAC01,Volts,1.383
ConfigGroup,LF Channel,State2,TS_DAC02,Volts,1.982

# Preset: State1
ConfigGroup,LF Channel,State1,TS_DAC01,Volts,1.757
ConfigGroup,LF Channel,State1,TS_DAC02,Volts,1.677

# Preset: State0
ConfigGroup,LF Channel,State0,TS_DAC01,Volts,1.383
ConfigGroup,LF Channel,State0,TS_DAC02,Volts,1.677

# Preset: State4
ConfigGroup,LF Channel,State4,TS_DAC01,Volts,1.383
ConfigGroup,LF Channel,State4,TS_DAC02,Volts,1.47

# Preset: State3
ConfigGroup,LF Channel,State3,TS_DAC01,Volts,1.163
ConfigGroup,LF Channel,State3,TS_DAC02,Volts,1.677


# Group: DAC03-Volts
# Preset: NewPreset
ConfigGroup,DAC03-Volts,NewPreset,TS_DAC03,Volts,0.0000



# PixelSize settings

